CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ID>.*_s0_a[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_full.tiff")
    Name to assign these images:Stack
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Stack
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:16
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    Image name:E_Cadherin

GaussianFilter:[module_num:6|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
    Select the input image:E_Cadherin
    Name the output image:ECad_Gauss
    Sigma:2

Threshold:[module_num:7|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
    Select the input image:ECad_Gauss
    Name the output image:ECad_Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:ECad_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<ID>_epithelium
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
