CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ID>.*)_ac_full
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_full.tiff")
    Name to assign these images:Stack
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Stack
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:17
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    Image name:CD68
    Channel number:31
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    Image name:ITGAX
    Channel number:21
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    Image name:DNASE1L3

ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CD68_ITGAX
    Image or measurement?:Image
    Select the first image:CD68
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ITGAX
    Multiply the second image by:1.0
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
GaussianFilter:[module_num:7|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
    Select the input image:CD68_ITGAX
    Name the output image:CD68_ITGAX_GaussianFilter
    Sigma:1

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CD68_ITGAX_GaussianFilter
    Name the primary objects to be identified:CD68_ITGAX_cells
    Typical diameter of objects, in pixel units (Min,Max):7,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:CD68_ITGAX_cells
    Name the output image:CD68_ITGAX_cells_image
    Select the color format:uint16
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:CD68_ITGAX_cells_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Stack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CD68_ITGAX_cells
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensityMultichannel:[module_num:11|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
    Select images to measure:Stack
    Select objects to measure:CD68_ITGAX_cells
    How many channels does the image have?:35

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c11,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c30,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c19,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c5,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c29,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c4,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c1,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c3,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c14,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c7,CD68_ITGAX_cells|Intensity_MeanIntensity_Stack_c24,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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